PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = bluegrass_memory
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial_target
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    PolygonComponent green_square_part1
      fillColor = -1.0000, 0.4824, -0.8353
      lineColor = -1.0000, 0.4824, -0.8353
      shape = rectangle
      size = (0.42, 0.42)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
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    PolygonComponent green_square_part2
      fillColor = white
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
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    ImageComponent image_target
      image [set every repeat] = $image_fn[1]
      interpolate = nearest
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    CodeComponent adjust_image_target_size
      Code Type = Py
      Begin Experiment:
        def scale_to_size(image_object, max_size):
            image_object.size *= max_size / max(image_object.size)  # scale to max size
            image_object._requestedSize = None  # reset for next image original size
      Begin Routine:
        box_size = 0.395
        scale_to_size(image_target, box_size)
    KeyboardComponent key_resp_catch_delay
      allowedKeys = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = all keys
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    CodeComponent initiate_trial_sequence
      Code Type = Py
      Begin Routine:
        # Set the first inter-stimulus interval (ISI) of fixation
        isi = rng.uniform(1.1, 1.4)

        # Begin a fresh counter for the number of images
        thisImageNumber = 0
    TextComponent text_fixation_first
      durationEstim = 1.25
      letterHeight = 0.1
      startEstim = 4.5
      startVal [condition] = $image_target.status == FINISHED
      stopVal [duration (s)] = $isi
      text = +
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    CodeComponent trigger_target
      Code Type = Py
      Begin Routine:
        target_started = False
      Each Frame:
        if image_target.status == STARTED and not target_started:
            win.callOnFlip(dev.activate_line, bitmask=target_start_code)
            win.callOnFlip(eyetracker.sendMessage, target_start_code)
            target_started = True
  Routine trial_image
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    CodeComponent setup_test_image
      Code Type = Py
      Begin Routine:
        # Obtain the current image filename
        thisImageType = imageType[thisImageNumber]
        image_test_fn = image_fn[thisImageType]
        thisCorrectResp = correct_resps[thisImageNumber]

        # Set the inter-stimulus interval (ISI) of fixation
        if thisImageNumber < (n_images_per_trial - 1):
            isi = rng.uniform(1.1, 1.4)
        else:
            # skip showing a fixation cross after the last image in sequence
            text_fixation.status = FINISHED
            # but still collect behavioral responses for another 1.5s
            isi = 1.5
      End Routine:
        thisExp.addData('trial_type', thisImageType)  # adding Trial Type to .csv file (1 = match, 0 = non-match)
        thisExp.addData('image_test_fn', image_test_fn)  # adding Test Image Name to .csv file
        thisExp.addData('correct_response', thisCorrectResp)  # adding Correct Response to .csv file

        thisImageNumber += 1  # accrue the image number by 1
    PolygonComponent white_square
      fillColor = white
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_test
      image [set every repeat] = $image_test_fn
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent adjust_image_test_size
      Code Type = Py
      Begin Routine:
        scale_to_size(image_test, box_size)
    TextComponent text_fixation
      durationEstim = 1.25
      letterHeight = 0.1
      startEstim = 1.5
      startVal [condition] = $image_test.status == FINISHED
      stopVal [duration (s)] = $isi
      text = +
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    KeyboardComponent key_resp
      allowedKeys = '1', '2'
      durationEstim = 2.75
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = $isi + 1.5
      store = all keys
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    CodeComponent trigger_image
      Code Type = Py
      Begin Routine:
        test_started = False
      Each Frame:
        if image_test.status == STARTED and not test_started:
            win.callOnFlip(dev.activate_line, bitmask=test_start_code)
            win.callOnFlip(eyetracker.sendMessage, test_start_code)
            test_started = True
  Routine instruct_diagram
    RoutineSettingsComponent instruct_diagram
      saveStartStop = False
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    ImageComponent image_schematic
      image = resource/taskSchematic.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent adjust_schematic_size
      Code Type = Py
      Begin Routine:
        scale_to_size(image_schematic, 1.5)
    TextComponent text_schematic
      color = black
      letterHeight = 0.1
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any of the white keys to continue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_schematic
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_schematic
      saveStartStop = False
      sound [set every repeat] = resource/instruct_diagram.wav
      startVal [time (s)] = 0.8
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  Routine response_feedback
    RoutineSettingsComponent response_feedback
      saveStartStop = False
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    CodeComponent set_feedback_text
      Code Type = Py
      Begin Routine:
        if not key_resp.keys:
            feedback_text = 'Respond Faster'
            feedback_text_color = [-1, -1, -1]

        # roll thisImageNumber back 1 since it got += 1 in the last routine
        elif key_resp.keys[0] == thisCorrectResp:  # check the first key pressed
            feedback_text = 'Correct'
            feedback_text_color = [-1, 1, -1]

        else:
            feedback_text = 'Incorrect'
            feedback_text_color = [1, -1, -1]
    TextComponent text_feedback
      color [set every repeat] = $feedback_text_color
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
      units = norm
      wrapWidth = 1.8
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  Routine instruct_practice
    RoutineSettingsComponent instruct_practice
      saveStartStop = False
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    TextComponent text_practice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        We will first do a round of practice trials.

        Remember: if an image matches the target, press the Green key, and if it does not match the target, press the Red key.

        Please respond as quickly and accurately as possible after you see each image.


        Press the green key to begin
    KeyboardComponent key_practice
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_practice
      saveStartStop = False
      sound [set every repeat] = resource/instruct_practice.wav
      startVal [time (s)] = 0.8
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  Routine instruct
    RoutineSettingsComponent instruct
      saveStartStop = False
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    TextComponent text_instruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this task, you will first see a sample image shown in a green box. Then, you will see a series of images presented one at a time following the target sample image.

        For each image in the sequence, you need to decide whether it matches the target or not. If it matches the target, please press the Green key, and if it does not match the target, press the Red key. In between images, please look at the fixation cross at the center of the screen.

        There will be a different target image for each sequence, and the target image at the beginning of a new sequence is marked by the green box.


        Press any of the white keys to see an overview diagram
    KeyboardComponent key_instruct
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct
      saveStartStop = False
      sound [set every repeat] = resource/instruct.wav
      startVal [time (s)] = 0.8
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We are now ready to begin...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_start
      saveStartStop = False
      sound [set every repeat] = resource/ready_to_begin.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      syncScreenRefresh = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 103 (task ID for bluegrass memory task)
        task_ID_code = 103
        print("Starting experiment: < Bluegrass Memory Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        target_start_code = 2
        test_start_code = 3
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name == 'Cedrus C-POD', "Incorrect C-POD detected."
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print("C-POD<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        # Set up condition arrays for the experiment
        rng = np.random.default_rng()
        session_int = int(expInfo['session'])
        idx_start = (session_int - 1) * 124 + 1
        idx_end = session_int * 124 + 1
        image_filenames = rng.permutation(['resource/' + str(x).zfill(3) + '.bmp' for x in range(idx_start, idx_end)])
        n_objects_per_trial = 2  # each trial alternates between two object images
        n_images_per_trial = 5  # each trial will present 5 test images of the two objects
        n_match_options = [2, 3]  # target image can appear 2 or 3 times per trial

        # Practice trials
        n_trials_practice = 2
        n_objects_practice = n_trials_practice * n_objects_per_trial  # 4 objects during practice
        image_fn_practice = image_filenames[:n_objects_practice]
        image_fn_practice_list = [image_fn_practice[i * n_objects_per_trial:(i + 1) * n_objects_per_trial] for i in range(n_trials_practice)]
        # decide the type of each image in the sequence of each trial
        imageType_practice_list = []
        for _ in range(n_trials_practice):
            n_match = rng.choice(n_match_options)
            n_nonmatch = n_images_per_trial - n_match
            imageType_practice_list.append(rng.permutation([1] * n_match + [0] * n_nonmatch))  # 1 = match, 0 = non-match

        # Main trials
        n_blocks = 2
        n_trials_per_block = 30  # a total of 60 trials
        n_trials = n_blocks * n_trials_per_block
        n_objects = n_trials * n_objects_per_trial  # 120 objects during main experiment
        image_fn = image_filenames[n_objects_practice:n_objects_practice + n_objects]
        image_fn_list = [image_fn[i * n_objects_per_trial:(i + 1) * n_objects_per_trial] for i in range(n_trials)]
        # decide the type of each image in the sequence of each trial
        imageType_list = []
        for _ in range(n_trials):
            n_match = rng.choice(n_match_options)
            n_nonmatch = n_images_per_trial - n_match
            imageType_list.append(rng.permutation([1] * n_match + [0] * n_nonmatch))  # 1 = match, 0 = non-match
        # split the lists into blocks
        image_fn_list_blocks = [image_fn_list[i * n_trials_per_block:(i + 1) * n_trials_per_block] for i in range(n_blocks)]
        imageType_list_blocks = [imageType_list[i * n_trials_per_block:(i + 1) * n_trials_per_block] for i in range(n_blocks)]

        assert len(image_filenames) == 124, "Incorrect number of picture stimuli loaded for this session."
        assert len(image_filenames) / n_objects_per_trial == (n_trials_practice + n_trials), "Incorrect number of trials for this session."
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine practice_setup
    RoutineSettingsComponent practice_setup
      saveStartStop = False
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    CodeComponent setup_practice_trial
      Code Type = Py
      Begin Routine:
        # Set up the content for a practice trial
        image_fn = image_fn_practice_list[practice_trials.thisRepN]
        imageType = imageType_practice_list[practice_trials.thisRepN]
        correct_resps = ['1' if itype == 1 else '2' for itype in imageType]
      End Routine:
        thisExp.addData('target_image', image_fn[1])  # adding Target Image Name to .csv file
        thisExp.addData('distractor_image', image_fn[0])  # adding Distractor Image Name to .csv file
  Routine practice_checkpoint
    RoutineSettingsComponent practice_checkpoint
      saveStartStop = False
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    TextComponent text_checkpoint
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please give us a moment to check whether practice trials need to be repeated...
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_checkpoint
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_checkpoint
      saveStartStop = False
      sound [set every repeat] = resource/instruct_checkpoint.wav
      startVal [time (s)] = 0.4
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    CodeComponent code_checkpoint
      Code Type = Py
      Begin Routine:
        # End of practice block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms as this routine waits for experimenter key press
      End Routine:
        if key_checkpoint.keys == 'o':  # proceed to main experiment
            practice_loop.finished = True
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Great job! We will now start the task.

        Remember: if an image matches the target, press the Green key, and if it does not match the target, press the Red key.

        Please respond as quickly and accurately as possible after you see each image. You will no longer receive feedback on your responses.


        Press the green key to begin
    KeyboardComponent key_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_begin
      saveStartStop = False
      sound [set every repeat] = resource/instruct_begin.wav
      startVal [time (s)] = 0.8
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  Routine trial_setup
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    CodeComponent setup_trial
      Code Type = Py
      Begin Routine:
        # Set up the content for a trial
        image_fn = image_fn_list_this_block[trials.thisRepN]
        imageType = imageType_list_this_block[trials.thisRepN]
        correct_resps = ['1' if itype == 1 else '2' for itype in imageType]
      End Routine:
        thisExp.addData('target_image', image_fn[1])  # adding Target Image Name to .csv file
        thisExp.addData('distractor_image', image_fn[0])  # adding Distractor Image Name to .csv file
  Routine block_setup
    RoutineSettingsComponent block_setup
      saveStartStop = False
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    CodeComponent setup_block
      Code Type = Py
      Begin Routine:
        # Set up the lists for a block
        image_fn_list_this_block = image_fn_list_blocks[blocks.thisRepN]
        imageType_list_this_block = imageType_list_blocks[blocks.thisRepN]

        # Start a block of trials
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        core.wait(0.5)  # wait 500ms before trial triggers
  Routine instruct_rest
    RoutineSettingsComponent instruct_rest
      saveStartStop = False
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    TextComponent text_rest
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Now you can take a break!

        After the short break, we will repeat the eyetracking camera calibration and continue with the rest of the task.


        Press any of the white keys when you are ready
    KeyboardComponent key_rest
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_rest
      saveStartStop = False
      sound [set every repeat] = resource/instruct_rest.wav
      startVal [time (s)] = 0.4
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  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 30 minutes.

        Before we explain the task, we need to first calibrate the eyetracking camera. Please sit in a comfortable position with your head on the chin rest. Once we begin, it is important that you stay in the same position throughout this task.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press any of the white keys to begin
    KeyboardComponent key_welcome
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine _et_instruct
    RoutineSettingsComponent _et_instruct
      saveStartStop = False
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    TextComponent text_et
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        During the calibration, you will see a target circle moving around the screen. Please try to track it with your eyes.

        Make sure to keep looking at the circle when it stops, and follow it when it moves. It is important that you keep your head on the chin rest once this part begins.


        Press any of the white keys when you are ready, and our team will start the calibration for you
    KeyboardComponent key_et
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_et
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_calibrate_instruct.wav
      startVal [time (s)] = 0.8
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  Routine _et_mask
    RoutineSettingsComponent _et_mask
      saveStartStop = False
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    TextComponent text_mask
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine instruct_continue
    RoutineSettingsComponent instruct_continue
      saveStartStop = False
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    TextComponent text_continue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        We will now continue with the task.

        Remember: if an image matches the target, press the Green key, and if it does not match the target, press the Red key.

        Please respond as quickly and accurately as possible after you see each image.


        Press the green key to begin
    KeyboardComponent key_continue
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_continue
      saveStartStop = False
      sound [set every repeat] = resource/instruct_continue.wav
      startVal [time (s)] = 0.8
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  Routine block_cleanup
    RoutineSettingsComponent block_cleanup
      saveStartStop = False
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    CodeComponent cleanup_block
      Code Type = Py
      Begin Routine:
        # End of block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms as we will calibrate again or we have thank you routine

        if blocks.thisRepN == (n_blocks - 1):  # last block of trials
            whether_rest = 0  # skip the rest_loop
        else:
            whether_rest = 1  # enter the rest_loop
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine _et_cal
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine instruct_practice_repeat
    RoutineSettingsComponent instruct_practice_repeat
      saveStartStop = False
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    TextComponent test_practice_repeat
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        We will repeat the practice trials one more time.

        Remember: if an image matches the target, press the Green key, and if it does not match the target, press the Red key.

        Please respond as quickly and accurately as possible after you see each image.


        Press the green key to begin
    KeyboardComponent key_practice_repeat
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_practice_repeat
      saveStartStop = False
      sound [set every repeat] = resource/instruct_practice_repeat.wav
      startVal [time (s)] = 0.8
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    CodeComponent skip_routine_check
      Code Type = Py
      Begin Routine:
        # Start a practice block
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        core.wait(0.5)  # wait 500ms before trial triggers

        # Skip this routine if first time doing practice
        if practice_loop.thisRepN == 0:
            continueRoutine = False
Flow
  Routine _welcome
  Routine _et_instruct
  Routine _et_mask
  EyetrackerCalibrationRoutine _et_cal
  Routine __start__
  Routine instruct
  Routine instruct_diagram
  Routine instruct_practice
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_practice_repeat
    LoopInitiator practice_trials loopType="TrialHandler"
      loopType = random
      nReps = n_trials_practice
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      Routine practice_setup
      Routine trial_target
      LoopInitiator practice_sequence loopType="TrialHandler"
        loopType = random
        nReps = n_images_per_trial
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        Routine trial_image
        Routine response_feedback
      LoopTerminator practice_sequence
    LoopTerminator practice_trials
    Routine practice_checkpoint
  LoopTerminator practice_loop
  Routine instruct_begin
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = n_blocks
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    Routine block_setup
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = n_trials_per_block
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      Routine trial_setup
      Routine trial_target
      LoopInitiator sequence loopType="TrialHandler"
        loopType = random
        nReps = n_images_per_trial
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        Routine trial_image
      LoopTerminator sequence
    LoopTerminator trials
    Routine block_cleanup
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = whether_rest
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      Routine instruct_rest
      Routine _et_instruct
      Routine _et_mask
      EyetrackerCalibrationRoutine _et_cal
      Routine instruct_continue
    LoopTerminator rest_loop
  LoopTerminator blocks
  Routine __end__
